OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Acquisition Monitoring Scenario

  Use it to check the signal quality before starting the experiment.
  Namely, check for if you can see:

  - eye blinks
  -jaw clenching
  - alpha waves when closing eyes

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8.000000
  High Cut-off Frequency (Hz) = 30.000000
Input stream 1=#1, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #2
Data=#2.Output stream 1, Stimulations=#2.Output stream 3 -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#2.Output stream 2, Stimulations=#2.Output stream 3 -> Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
