OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Training session scenario

  Collect training data for training the classifier
  for online use.

  Upon starting the scenario, the instruction
  sequence starts after 40 seconds.

  You will be presented with a right arrows,
  which mark you should imagine right hand
   movement. You will also be presented with
  "REST" text, which mark you should relax
  without real or imagined movements.
  There's 20 stimulations for each class.

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-stimulator.lua
  Number of Trials for Each Class = 5
  First Class = OVTK_GDF_Right
  Second Class = OVTK_StimulationId_RestStart
  Baseline Duration (in sec) = 5
  Wait For Beep Duration (in sec) = 2
  Wait For Beep Duration (in sec)(1) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
#0 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_End_Of_Trial
  Cue Image 1 = ${Player_ScenarioDirectory}/handclosingCue.png
  Stimulation 1 = OVTK_GDF_Right
  Cue Image 2 = ${Player_ScenarioDirectory}/restClue.png
  Stimulation 2 = OVTK_StimulationId_RestStart

Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input Signal=#3.Signal stream, Input Stimulations=#3.Stimulations, Input stream 3=#3.Experiment information -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].ov
  Use compression = false
Input Signal=#3.Signal stream, Input Stimulations=#3.Stimulations, Input stream 3=#3.Experiment information -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/trainingdata.ov
  Use compression = false
#3.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
