OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  CSP trainer

  This scenario trains the Common Spatial Patterns filter
  on the training data from the last recorded session.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/trainingdata.ov
#0.Output stream 1 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8.000000
  High Cut-off Frequency (Hz) = 30.000000
-> Channel Selector "F1;Fz;F2;C3;Cz;C4;P3;P4" => #2
  Channel List = F1;Fz;F2;C3;Cz;C4;P3;P4
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#2, Input stream 2=#0.Output stream 2 -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right hand" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Right
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Rest" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_StimulationId_RestStart
Stimulations=#3.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
  Filter dimension = 5
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#0.Output stream 2 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_TrainCompleted
  Cue Image 1 = ${Player_ScenarioDirectory}/calibration1.png
  Stimulation 1 = OVTK_GDF_Right
  Cue Image 2 = ${Player_ScenarioDirectory}/calibration2.png
  Stimulation 2 = OVTK_StimulationId_RestStart
#0.Output stream 2 -> Stimulation listener
  Log level to use = Information
