OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Classifier (LDA)  trainer

  This scenario trains the Linear Discriminant Analysis classifier
  on the training data from the last recorded session using the
  learned CSP filter from the previous step.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/trainingdata.ov
#0.Output stream 1 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8.000000
  High Cut-off Frequency (Hz) = 30.000000
-> Channel Selector "F1;Fz;F2;C3;Cz;C4;P3;P4" => #2
  Channel List = F1;Fz;F2;C3;Cz;C4;P3;P4
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#2, Input stream 2=#0.Output stream 2 -> Identity => #3
#3.Output stream 1 -> CSP Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right hand"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Input signal=#4, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Rest"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_StimulationId_RestStart
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #16
Stimulations=#3.Output stream 2, Features for class 1=#10, Features for class 2=#16 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Right
  Class 2 label = OVTK_StimulationId_RestStart
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 5
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = false
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#0.Output stream 2 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_TrainCompleted
  Cue Image 1 = ${Player_ScenarioDirectory}/calibration1.png
  Stimulation 1 = OVTK_GDF_Right
  Cue Image 2 = ${Player_ScenarioDirectory}/calibration2.png
  Stimulation 2 = OVTK_StimulationId_RestStart
#0.Output stream 2 -> Stimulation listener
  Log level to use = Information
