OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Replay

  You can run previously recorded signals here
  and it will output the same thing as if you ran
  it online

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/trainingdata.ov
#0.Output stream 1 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8.000000
  High Cut-off Frequency (Hz) = 30.000000
-> Channel Selector "F1;Fz;F2;C3;Cz;C4;P3;P4"
  Channel List = F1;Fz;F2;C3;Cz;C4;P3;P4
  Action = Select
  Channel Matching Method = Smart
-> CSP Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #8
Features=#8 -> Classifier processor => #9
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
Matrix=#9.Probability values -> Continuous bars_t
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 10
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 1
  Caption =
  Translucency = 1
  Color = 0:0,0,50; 100:0,100,100
#9.Probability values -> Matrix Display
  Color gradient = 0:100,100,100; 100:91,28,28
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#9.Probability values -> Matrix Transpose
-> Threshold Crossing Detector => #13
  Threshold = 0.5
  Cross over threshold = OVTK_GDF_Right
  Cross under threshold = OVTK_StimulationId_RestStart
  Channel Index = 1
-> Sound Player
  PLAY trigger = OVTK_GDF_Right
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
#13 -> TCP Writer
  Port = 5678
  Output format = String
#9.Probability values -> TCP Writer
  Port = 5677
  Output format = Raw
#0.Output stream 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
